PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MoralCondition
  keyboardBackend = ioHub
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Routines
  Routine Game_Start
    TextComponent Game_Start_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the spacebar to start the game. 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Fixation_Cross
    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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  Routine Opponent
    ImageComponent player_image_intro
      image = brandon is hot stuff
      pos = (-.75, .5)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      units = norm
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    TextboxComponent player_name_intro
      bold = False
      editable = False
      letterHeight = 0.08
      pos = (.75, .5)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text = $opponent_names[0]
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  Routine Offer
    ImageComponent player_image_offer
      image = $opponent_filenames.pop(0)
      pos = (-.75, .5)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12.0
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    TextboxComponent player_name_offer
      bold = False
      editable = False
      letterHeight = 0.08
      pos = (.75, .5)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12.0
      text = $opponent_names.pop(0)
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    TextComponent proposed_split
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.7
      text = $bet_phrases.pop(0)
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    TextComponent accept_reject
      letterHeight = 0.05
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 6.0
      text = Do you accept or reject this offer?
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  Routine Arrows
    TextComponent arrow_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.1
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      text:
        Press the "up" arrow to accept

        Press the "down"arrow to reject
    KeyboardComponent offer_choice
      allowedKeys = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Non_Verbal_Instructions
    TextComponent Instructions_Affinity_Score
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text = Please rate on the following scale how well each face captures your feelings about the offer you received. 
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  Routine Non_Verbal
    ImageComponent Emotion_Image
      image = $emotion_filenames.pop(0)
      pos = (0, .25)
      size = (0.5, 0.4)
      startVal [time (s)] = 0.0
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    SliderComponent AffinityScore
      borderColor = 1.0000, 1.0000, 1.0000
      color = 0.8, 0.8, 0.8
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 1
      labels = ("Very untrue of me", "Untrue of me", "Somewhat untrue of me", "Neurtral", "Somewhat true of me", "True of me", "Very true of me")
      letterHeight = 0.02
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine Verbal
    TextComponent Instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please rate on the following scale how morally wrong you felt the offer you received was. 
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    SliderComponent Moral_Disgust_Score
      color = 0.8, 0.8, 0.8
      forceEndRoutine = True
      granularity = 1
      labels = ("Extremely Immoral", "Immoral", "Somewhat Immoral", "Neutral", "Somewhat Moral", "Moral", "Extremely Moral")
      letterHeight = 0.02
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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Flow
  Routine Game_Start
  LoopInitiator loop loopType="TrialHandler"
    loopType = sequential
    nReps = 20
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    Routine Fixation_Cross
    Routine Opponent
    Routine Offer
    Routine Arrows
    Routine Non_Verbal_Instructions
    Routine Non_Verbal
    Routine Non_Verbal
    Routine Non_Verbal
    Routine Non_Verbal
    Routine Non_Verbal
    Routine Non_Verbal
    Routine Non_Verbal
    Routine Verbal
  LoopTerminator loop
